<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.7.27">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            <file>/Volumes/T7_Shield/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_C1_CID_20ev.mzML</file>
        </parameter>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_msn_tree.MsnTreeFeatureDetectionModule" module_name="MSn tree feature list builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="EIC scans" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">msn trees</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.LocalCSVDatabaseSearchModule" module_name="Local compound database search" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Database file">
            <current_file>/Users/adrutz/Documents/lab/Zeno/msmls_metadata_pos.tsv</current_file>
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        </parameter>
        <parameter name="Field separator">\t</parameter>
        <parameter name="Columns">
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            <importtype column="smiles" datatype="io.github.mzmine.datamodel.features.types.annotations.SmilesStructureType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false" unit="MINUTES">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</parameter>
        <parameter name="Mobility time tolerance" selected="false">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</parameter>
        <parameter name="CCS tolerance (%)" selected="false">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</parameter>
        <parameter name="Use isotope matcher" selected="true">
            <parameter name="Isotope m/z tolerance">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum isotope intensity (%)">0.05</parameter>
            <parameter name="Minimum isotope score">0.0</parameter>
        </parameter>
        <parameter name="Use adducts" selected="true">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="0.0" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                </adduct_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="15.99491462" mol_formula="O" name="O" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-27.994915" mol_formula="CO" name="CO" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-28.031301" mol_formula="C2H4" name="C2H4" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="60.021129" mol_formula="CH3COOH" name="HAc" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="41.026549" mol_formula="CH3CN" name="ACN" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="60.058064" mol_formula="C3H8O" name="IsoProp" type="CLUSTER"/>
                </modification_type>
            </parameter>
        </parameter>
        <parameter name="Filter filename header" selected="true">position</parameter>
        <parameter name="Additional columns" selected="ignore"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" module_name="Batch spectral library generation" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>/Users/adrutz/Documents/lab/Zeno/{}.mgf</current_file>
        </parameter>
        <parameter name="Export format">mgf</parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description"/>
            <parameter name="Dataset ID"/>
            <parameter name="INSTRUMENT_NAME">ZENOTOF7600</parameter>
            <parameter name="INSTRUMENT">qTof</parameter>
            <parameter name="Ion mobility">NONE</parameter>
            <parameter name="IONSOURCE">DI-ESI</parameter>
            <parameter name="ACQUISITION">Crude</parameter>
            <parameter name="ACQUISITION_METHOD"/>
            <parameter name="PI">NZamboni</parameter>
            <parameter name="DATACOLLECTOR">MPovoa</parameter>
            <parameter name="DATACURATOR">ARutz</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_msn_trees</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" module_name="Batch spectral library generation" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>/Users/adrutz/Documents/lab/Zeno/{}.msp</current_file>
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        </parameter>
        <parameter name="Export format">msp</parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description"/>
            <parameter name="Dataset ID"/>
            <parameter name="INSTRUMENT_NAME">ZENOTOF7600</parameter>
            <parameter name="INSTRUMENT">qTof</parameter>
            <parameter name="Ion mobility">NONE</parameter>
            <parameter name="IONSOURCE">DI-ESI</parameter>
            <parameter name="ACQUISITION">Crude</parameter>
            <parameter name="ACQUISITION_METHOD"/>
            <parameter name="PI">NZamboni</parameter>
            <parameter name="DATACOLLECTOR">MPovoa</parameter>
            <parameter name="DATACURATOR">ARutz</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_msn_trees</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
</batch>
